#include "set_path.s2s"
#include "spike_manipulation_fnc.s2s"
#include "noise_estimate_fcn.s2s"

var sigchan% := 10;
var newmark%; 'view for the new wavemark
var filtered%; 'Channel for filtered voltage trace

var thres; 'Default spike detection threshold, waveclus style
var stdmin := 3; var stdmax := 12; 'multipliers for wave_clus noise estimate

var sr := 40000; 'Sampling rate

main();
halt;

proc main()

FilePathSet(ssdir$,0);

timevw% := FileOpen("",0,3); 'Open a file for processing
WindowVisible(3);
var low% := 300;
var high% := 9000;

    DlgCreate("Filtering");  'Start new dialog 
    DlgChan(1,"Signal:",1);
    DlgInteger(2,"High Pass (Hz):",0,3000);
    DlgInteger(3,"Low Pass (Hz):",3000,20000);
    DlgButton(0,"Cancel");
    DlgButton(1,"OK");
    var ok% := DlgShow(sigchan%,low%,high%);    'ok% is 0 if user cancels,  variables updated if not

var seglength% := 1200; 'Examine seglength% seconds of signal at a time
var seg% := Ceil(View(timevw%).MaxTime()/seglength%); ' How many seglength% second long pieces?

filtered% := MemChan(1,0,View(timevw%).Binsize(sigchan%));
var iter%, tempfiltered%;
for iter% := 1 to seg% do
    'Filter the raw signal
    tempfiltered% := filterrawseg(sigchan%,low%,high%,seglength%*(iter%-1),seglength%*iter%);          '... save a filtered version of channel 1 to it.
    MemImport(filtered%, tempfiltered%, 0, MaxTime());  'Copy data
    ChanDelete(tempfiltered%);
next;
    ChanShow(filtered%);

thres := View(timevw%).getnoise(filtered%);
newmark% := View(timevw%).openwavem(filtered%,thres,stdmin,stdmax); 'Open a new wavemark dialogue

ToolbarClear();     'Remove any old buttons
ToolbarSet(1, "Quit",quit%);
ToolbarSet(0, "", waitclose%);   'Idle routine
Toolbar("Waiting...",4607);

var dummych%, dummychvec%[2]; 'convoluted method to extract higest numbered wavemark, assuming it's the one you just created.
if View(timevw%).ChanList(dummychvec%, 16) > 0 then 'If wavemarks exist
    dummych% := View(ViewLink()).ChanList(dummychvec%, 16)+1;                 'get their number and then
endif;                                          
var dummychreal%[dummych%];                                                 'make a vector to hold all of them
if View(timevw%).ChanList(dummychreal%, 16) > 0 then 'If wavemarks exist
    dummychreal%[0] := 0;                 'discard first entry
    wvmrkch% := dummychreal%[Max(dummychreal%)];                  'get latest wavemark
endif;

wcnt% := View(timevw%).countwaves(wvmrkch%); 'count spikes;

'samps% := View(timevw%).getWavemarkInfo(wvmrkch%,1); 'How many samples per spike?
'var data[wcnt%][samps%], times[wcnt%]; 'save spikes here;
'View(timevw%).getwaves(wvmrkch%,data[][]);
'var amps[wcnt%], sig,ampstd;
'View(timevw%).extractFeatMat(amps[],data[][],1);

var amps[wcnt%], sig, ampstd; 'save amplitudes to variable amps
View(timevw%).extractFeatWave(wvmrkch%,amps[],1);
ArrSum(amps[],sig,ampstd);
Message("SNR is ", sig/thres);

var pre%;
var samps% := MarkInfo(wvmrkch%,pre%);
var memch% := MemChan(6,samps%,BinSize(sigchan%),pre%);

end


func quit%()
return 0
end;

func waitclose%()
var state% := 1;
if (SSopen(-1) = 0) then
    state% := 0;
endif;

return state%;
end 
