func getnoise(ch%)
var noise;
var max% := Ceil(Maxtime()/Binsize(ch%));

if max% > 16000000 then
    max% := 1600000
endif;

var data[max%], n%;
n% := ChanData(ch%, data[], 0, MaxTime());
Abs(data[]);
noise := median(data[])/0.6745;

return noise;
end

func filterraw(src%, low%, high%)
IIRCreate(-1, 2, 0, 4, low%, high%); 'IIR Band pass Butterworth 0.3 to 9 kHz, fourth order
var dest% := IIRApply(-1, 0, src%, 0.000000, MaxTime(), 1); 'Apply created filter to a new channel
ChanShow(dest%);
return dest%;
end  

func filterrawseg(src%, low%, high%,start%,stop%)
IIRCreate(-1, 2, 0, 4, low%, high%); 'IIR Band pass Butterworth 0.3 to 9 kHz, fourth order
var dest% := IIRApply(-1, 0, src%, start%, stop%, 1); 'Apply created filter to a new channel
ChanShow(dest%);
return dest%;
end

func openwavem(ch%,thres,stdmin,stdmax)
'' Open a new wavemark
var newmark% := SSOpen(2,1);
View(newmark%);
SSChan(ch%); Draw();

'' Set wavemark parameters
SSTempSizeSet(12,32,80,24); 'First number: how many samples right of the first one; Second number: how many samples in template? Third: How many samples in window; Fourth: How far into the window is 0
SSParam(16, 32.00, 50, 20.00, 90.00, 2, 1, 128, 2, 31); 
Optimise(); Draw();
View(ViewLink()).HCursorDelete(-1); 'Delete all horizontal cursors
SSButton(9, 1); 'Enable exclusion cursors
HCursor(1, -stdmin*thres); 'Set Wavemark low trigger level
HCursor(2, stdmin*thres); 'Set Wavemark high trigger level
HCursor(3, -stdmax*thres); 'Set Wavemark low exclusion trigger level
HCursor(4, stdmax*thres); 'Set Wavemark high exclusion trigger level
return newmark%;
end

func unusedchan()
var ch1%, ch%[2];
if View(ViewLink()).ChanList(ch%, 128) > 0 then 'If unused channels
    ch1% := ch%[1];                 'use first
endif;
return ch1%;
end

func median(vec[])
var med, size, half;
ArrSort(vec[]);
    size := Len(vec[]);
    half := Floor(size/2);
    med := vec[half];
    if 2*half = size then
        med := (med+vec[half-1])/2;
    endif;
return med;
end